CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:37
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['IMPROVE CHROMATIN SEGMENTATION']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*(?P<Experimenter>[A-Z][A-Z][A-Z])[/](?P<Experiment>Exp[0-9]+)[/](?P<cvsp>[0-9])[_](?P<Treatment>[0-9][0-9][0-9])
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Set>.*)$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Lamin': u'Experimenter'}, {u'Lamin': u'Experiment'}, {u'Lamin': u'cvsp'}, {u'Lamin': u'Treatment'}, {u'Lamin': None}, {u'Lamin': u'Set'}]
    Image set matching method:Metadata
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    Assignments count:1
    Single images count:0
    Select the rule criteria:and (file does contain "LaminB1")
    Name to assign these images:Lamin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:4
    Metadata category:Experimenter
    Metadata category:Experiment
    Metadata category:cvsp
    Metadata category:Treatment

EnhanceEdges:[module_num:5|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
    Select the input image:Lamin
    Name the output image:DNAEdged
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:Lamin
    Name the output image:DNATubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness

RescaleIntensity:[module_num:7|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
    Select the input image:DNATubeness
    Name the output image:DNATubenessRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:DNAEdged
    Name the output image:DNAEdgedRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:Lamin
    Name the output image:DNARescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNAMath
    Image or measurement?:Image
    Select the first image:Lamin
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DNAEdgedRescaled
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:DNARescaled
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:DNATubenessRescaled
    Multiply the fourth image by:1.0
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
ConserveMemory:[module_num:11|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
    Specify which images?:Images to keep
    Select image to keep:Lamin
    Select image to keep:DNAMath

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:DNAMath
    Name the primary objects to be identified:Chromatin
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
ConserveMemory:[module_num:13|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
    Specify which images?:Images to keep
    Select image to keep:Lamin

EnhanceEdges:[module_num:14|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
    Select the input image:Lamin
    Name the output image:RhodamineEdged
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Lamin
    Name the output image:RhodamineTexture
    Select the operation:Enhance
    Feature size:10
    Feature type:Texture
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    Smoothing scale:2
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
EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:Lamin
    Name the output image:RhodamineTubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness

RescaleIntensity:[module_num:17|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
    Select the input image:Lamin
    Name the output image:RhodamineRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:18|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
    Select the input image:RhodamineEdged
    Name the output image:RhodamineEdgedRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:19|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
    Select the input image:RhodamineTexture
    Name the output image:RhodamineTextureRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:20|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
    Select the input image:RhodamineTubeness
    Name the output image:RhodamineTubnessRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:21|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:RhodamineMath
    Image or measurement?:Image
    Select the first image:RhodamineRescaled
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:RhodamineEdgedRescaled
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:RhodamineTextureRescaled
    Multiply the third image by:1
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    Image or measurement?:Image
    Select the fourth image:RhodamineTubnessRescaled
    Multiply the fourth image by:1
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    Image or measurement?:Image
    Select the fifth image:Lamin
    Multiply the fifth image by:1
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
ConserveMemory:[module_num:22|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
    Specify which images?:Images to keep
    Select image to keep:Lamin
    Select image to keep:RhodamineMath

IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:RhodamineMath
    Name the primary objects to be identified:PreSpindles
    Typical diameter of objects, in pixel units (Min,Max):50,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:24|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
    Select the input image:Lamin
    Name the primary objects to be identified:Spindles
    Typical diameter of objects, in pixel units (Min,Max):50,250
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:PreSpindles
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ConserveMemory:[module_num:25|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
    Specify which images?:Images to keep
    Select image to keep:Lamin

RelateObjects:[module_num:26|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
    Select the input child objects:Chromatin
    Select the input parent objects:Spindles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:27|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
    Name the output objects:FilteredSpindles
    Select the object to filter:Spindles
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_Chromatin_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:28|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
    Name the output objects:FilteredChromatin
    Select the object to filter:Chromatin
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Parent_Spindles
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ImageMath:[module_num:29|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:RhodamineCorrected
    Image or measurement?:Image
    Select the first image:Lamin
    Multiply the first image by:16
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    Image or measurement?:Image
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
ImageMath:[module_num:30|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNACorrected
    Image or measurement?:Image
    Select the first image:Lamin
    Multiply the first image by:16
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    Image or measurement?:Image
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
MeasureObjectIntensity:[module_num:31|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
    Hidden:1
    Select an image to measure:Lamin
    Select objects to measure:Chromatin

MeasureObjectSizeShape:[module_num:32|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
    Select objects to measure:Chromatin
    Calculate the Zernike features?:Yes

MeasureObjectRadialDistribution:[module_num:33|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Lamin
    Select objects to measure:Chromatin
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:5
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
MeasureTexture:[module_num:34|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
    Hidden:1
    Hidden:1
    Hidden:5
    Select an image to measure:Lamin
    Select objects to measure:Chromatin
    Texture scale to measure:5
    Angles to measure:Vertical,Horizontal
    Texture scale to measure:10
    Angles to measure:Vertical,Horizontal
    Texture scale to measure:15
    Angles to measure:Vertical,Horizontal
    Texture scale to measure:20
    Angles to measure:Vertical,Horizontal
    Texture scale to measure:25
    Angles to measure:Vertical,Horizontal
    Measure Gabor features?:No
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
RelateObjects:[module_num:35|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
    Select the input child objects:FilteredChromatin
    Select the input parent objects:FilteredSpindles
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
ExportToSpreadsheet:[module_num:36|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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
ExportToDatabase:[module_num:37|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:2
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:FilteredSpindles
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
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    Do you want to add group fields?:Yes
    Enter the name of the group:ExperimentTreatment
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Experiment, Image_Metadata_Treatment
    Enter the name of the group:Treatment
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Treatment
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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