CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*[Raw/](?P<Experimenter>[A-Z]+)[/](?P<Experiment>Exp[0-9]+)[/](?P<cvsp>[0-9]+)[_](?P<Treatment>[0-9]+)[_](?P<Type>[A-Z]+)[\\\\\\\\/](?P<Set>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
    Select the rule criteria:and (file does contain "TRITC")
    Name to assign these images:Rhodamine
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:6
    Metadata category:Experimenter
    Metadata category:Experiment
    Metadata category:Treatment
    Metadata category:cvsp
    Metadata category:Type
    Metadata category:Set

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Rhodamine
    Name the primary objects to be identified:Asters
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectIntensity:[module_num:6|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
    Hidden:1
    Select an image to measure:Rhodamine
    Select objects to measure:Asters

MeasureObjectRadialDistribution:[module_num:7|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Rhodamine
    Select objects to measure:Asters
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:8
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Asters
    Calculate the Zernike features?:Yes

MeasureImageAreaOccupied:[module_num:9|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Asters
    Retain a binary image of the object regions?:No
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
ExportToDatabase:[module_num:10|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Asters
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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