CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<ExperimentID>.*)_(?P<Treatment>[a-z,A-Z,0-9,-]+)_(?P<Stain>.*)_(?P<ImageID>[0-9]+).tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:RawInput
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:RawInput
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:FilteredImage
    Name the primary objects to be identified:SegmentedNuclei
    Typical diameter of objects, in pixel units (Min,Max):70,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:MCT
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Method to calculate adaptive window size:Image size
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
MaskImage:[module_num:7|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
    Select the input image:RawInput
    Name the output image:MaskedRaw
    Use objects or an image as a mask?:Objects
    Select object for mask:SegmentedNuclei
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    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:SegmentedNuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:Yes
    Name the outline image:ShrunkenNucleiOutlines

MaskImage:[module_num:9|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
    Select the input image:RawInput
    Name the output image:MaskedRawAfterShrinking
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenNuclei
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    Invert the mask?:No

ImageMath:[module_num:10|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:ImageAfterMathLamina
    Image or measurement?:Image
    Select the first image:MaskedRaw
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MaskedRawAfterShrinking
    Multiply the second image by:1.0
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMathLamina
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:SegmentedNuclei
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:ShrunkenNuclei

EnhanceOrSuppressFeatures:[module_num:12|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
    Select the input image:MaskedRawAfterShrinking
    Name the output image:MaskedRawAfterShrinkingEnhSpeckles
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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
Smooth:[module_num:13|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
    Select the input image:MaskedRawAfterShrinkingEnhSpeckles
    Name the output image:FilteredSpeckles
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:FilteredSpeckles
    Name the primary objects to be identified:Speckles
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MeasureObjectIntensity:[module_num:15|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
    Hidden:1
    Select an image to measure:RawInput
    Select objects to measure:SegmentedNuclei
    Select objects to measure:ShrunkenNuclei

MeasureObjectIntensity:[module_num:16|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
    Hidden:1
    Select an image to measure:ImageAfterMathLamina
    Select objects to measure:SegmentedNuclei
    Select objects to measure:ShrunkenNuclei

MeasureObjectIntensity:[module_num:17|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
    Hidden:1
    Select an image to measure:RawInput
    Select objects to measure:Speckles

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:SegmentedNuclei
    Select objects to measure:Speckles
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:19|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
    Hidden:1
    Hidden:2
    Hidden:2
    Select an image to measure:RawInput
    Select objects to measure:SegmentedNuclei
    Select objects to measure:ShrunkenNuclei
    Texture scale to measure:5
    Angles to measure:Vertical,Horizontal
    Texture scale to measure:10
    Angles to measure:Horizontal,Vertical
    Measure Gabor features?:No
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
RelateObjects:[module_num:20|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
    Select the input child objects:Speckles
    Select the input parent objects:ShrunkenNuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
CalculateMath:[module_num:21|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
    Name the output measurement:AspectRatioNuclei
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:SegmentedNuclei
    Select the numerator measurement:AreaShape_MaxFeretDiameter
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:SegmentedNuclei
    Select the denominator measurement:AreaShape_MinFeretDiameter
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:22|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
    Name the output measurement:MaxFeretMicron
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:SegmentedNuclei
    Select the numerator measurement:AreaShape_MaxFeretDiameter
    Multiply the above operand by:0.1048064
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:23|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
    Name the output measurement:MinFeretMicron
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:SegmentedNuclei
    Select the numerator measurement:AreaShape_MinFeretDiameter
    Multiply the above operand by:0.1048064
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:24|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
    Name the output measurement:AreaSquareMicron
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:SegmentedNuclei
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:0.01098438
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:25|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
    Name the output measurement:TotalSpeckleAreaEstimateMicron
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:ShrunkenNuclei
    Select the first operand measurement:Children_Speckles_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:ShrunkenNuclei
    Select the second operand measurement:Mean_Speckles_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.01098438
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:26|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
    Name the output measurement:TotalSpeckleToNucleusArea
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:ShrunkenNuclei
    Select the numerator measurement:Math_TotalSpeckleAreaEstimateMicron
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:SegmentedNuclei
    Select the denominator measurement:Math_AreaSquareMicron
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:27|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
    Name the output measurement:TotalIntegratedSpeckleIntensity
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:ShrunkenNuclei
    Select the first operand measurement:Children_Speckles_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:ShrunkenNuclei
    Select the second operand measurement:Mean_Speckles_Intensity_IntegratedIntensity_RawInput
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:28|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
    Name the output measurement:FractionOfSignalInSpecklesInterior
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:ShrunkenNuclei
    Select the numerator measurement:Math_TotalIntegratedSpeckleIntensity
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:ShrunkenNuclei
    Select the denominator measurement:Intensity_IntegratedIntensity_RawInput
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_trial1
    Overwrite without warning?:No
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